CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'The regular expression used here will extract the information before the first underscore as a group identifier.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^([^_]*)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'In this case, I started with single channel images that contained the stain name only once at the very end of the file. Alternatively, starting from a four-channel tif also works well; the first steps should be replaced with a single ColorToGray step with conversion method Split, image type Channels, and then add and name the channels in the image.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ki67")
    Name to assign these images:Ki67
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "pS6")
    Name to assign these images:pS6
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ITGB5")
    Name to assign these images:ITGB5
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ColorToGray:[module_num:5|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notes:['Convert the color image to gray to make intensity processing easier downstream. ']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
    Select the input image:DAPI
    Conversion method:Combine
    Image type:RGB
    Name the output image:DAPIGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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notes:['Convert the color image to gray to make intensity processing easier downstream. ']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
    Select the input image:Ki67
    Conversion method:Combine
    Image type:RGB
    Name the output image:Ki67Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:7|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notes:['Convert the color image to gray to make intensity processing easier downstream. ']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
    Select the input image:pS6
    Conversion method:Combine
    Image type:RGB
    Name the output image:pS6Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:8|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notes:['Convert the color image to gray to make intensity processing easier downstream. ']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
    Select the input image:ITGB5
    Conversion method:Combine
    Image type:RGB
    Name the output image:ITGB5Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Otsu three classes with middle intensity foreground works well for DAPI, where there is a clear negative background and even “weak” positives should be counted as cells.']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
    Select the input image:DAPIGray
    Name the primary objects to be identified:DAPI_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Otsu three classes with middle intensity background works well when you only want the highest positive cells to be counted.']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
    Select the input image:Ki67Gray
    Name the primary objects to be identified:Ki67_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:11|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notes:['Make a rough guess of the pS6 primary objects — these will not be used in the final count, but instead will be used to filter to roughly pS6+ nuclei. Without this step, the primary object identification doesn’t do a great job of segmentation, and secondary object identification will start from every single DAPI+ nuclei, even those that are negative for pS6. ', '', 'A simple manual lower bound on the threshold helps filter out uniformly high background.']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
    Select the input image:pS6Gray
    Name the primary objects to be identified:pS6_primary
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Make a rough guess of the ITGB5 primary objects — these will not be used in the final count, but instead will be used to filter to roughly ITGB5+ nuclei. Without this step, the primary object identification doesn’t do a great job of segmentation, and secondary object identification will start from every single DAPI+ nuclei, even those that are negative for ITGB5. ']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
    Select the input image:ITGB5Gray
    Name the primary objects to be identified:ITGB5_Primary
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:13|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notes:['Filter all nuclei to only those nuclei that are pS6+. The resulting object here will then be used as a seed to identify pS6 secondary objects.']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
    Parent objects:pS6_primary
    Child objects:DAPI_Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PS6_Nuclei
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
RelateObjects:[module_num:14|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notes:['Filter all nuclei to only those nuclei that are ITGB5+. The resulting object here will then be used as a seed to identify ITGB5 secondary objects.']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
    Parent objects:ITGB5_Primary
    Child objects:DAPI_Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:ITGB5_Nuclei
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
IdentifySecondaryObjects:[module_num:15|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notes:['Starting from the pS6+ nuclei, identify the entire cell that stains positive for pS6.']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
    Select the input objects:PS6_Nuclei
    Name the objects to be identified:pS6_Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:pS6Gray
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3448
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:16|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notes:['Starting from the ITGB5+ nuclei, identify the entire cell that stains positive for ITGB5.']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
    Select the input objects:ITGB5_Nuclei
    Name the objects to be identified:ITGB5_Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ITGB5Gray
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:DAPI_Nuclei, ITGB5_Cells, Ki67_Nuclei, pS6_Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/NOWLab/Projects/tRG/210521_LPA-2D_Processing/CellProfiler_Outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:G_hiRapa_reprocess_
    Overwrite existing files without warning?:No
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